PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = working_memory_experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent rect1
      fillColor [set every repeat] = $rect1_col
      lineWidth = 0
      pos [set every repeat] = rect1_loc
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
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    PolygonComponent rect2
      fillColor [set every repeat] = $rect2_col
      lineWidth = 0
      pos [set every repeat] = rect2_loc
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
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    PolygonComponent rect3
      fillColor [set every repeat] = $rect3_col
      lineWidth = 0
      pos [set every repeat] = rect3_loc
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
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    PolygonComponent rect4
      fillColor [set every repeat] = $rect4_col
      lineWidth = 0
      pos [set every repeat] = rect4_loc
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
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    PolygonComponent rect5
      fillColor [set every repeat] = $rect5_col
      lineWidth = 0
      pos [set every repeat] = rect5_loc
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
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    PolygonComponent rect6
      fillColor [set every repeat] = $rect6_col
      lineWidth = 0
      pos [set every repeat] = rect6_loc
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
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    PolygonComponent rect7
      fillColor [set every repeat] = $rect7_col
      lineWidth = 0
      pos [set every repeat] = rect7_loc
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
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    PolygonComponent rect8
      fillColor [set every repeat] = $rect8_col
      lineWidth = 0
      pos [set every repeat] = rect8_loc
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 1
      stopVal [duration (s)] = .5
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    PolygonComponent probe
      fillColor = 0.0000, 0.0000, 0.0000
      pos [set every repeat] = probe_loc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 2.4
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    SliderComponent slider
      borderColor = 0.0000, 0.0000, 0.0000
      color = 0.0000, 0.0000, 0.0000
      fillColor = 0.0000, 0.0000, 0.0000
      forceEndRoutine = True
      granularity = 0
      initVal = 0.5
      letterHeight = 0.05
      opacity = 0
      pos = (0, -0.4)
      size = (1, 0.1)
      startVal [time (s)] = 2.4
      styles = slider
      ticks = {0,1}
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    ImageComponent colorbar
      image = colorbar.jpg
      pos = (0, -0.4)
      size = (1, 0.1)
      startVal [time (s)] = 2.4
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  Routine instructions
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Colored blocks will be shown on the screen.
        A certain location will be selected.
        Use the slider to indicate the color of the block that corresponds to that location.

        When you're ready, press [SPACE] to continue.
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
  Routine rest
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    TextComponent text_norm_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = If you are ready for the next block, press 'space' to continue
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent key_instruct_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent text_align_2
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        text_norm.alignText= 'left'
      Begin JS Experiment:
        // Code component set to Both
        text_norm.setAlignHoriz('left')
Flow
  Routine instructions
  LoopInitiator Block1 loopType="TrialHandler"
    conditionsFile = C:/Users/TheAn/OneDrive/Documents/visual_working_memory_task/WorkingMemory_block1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'rect1_col': '#FFD100', 'rect1_loc': (-0.2, -0.05), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.140625, 'probe_loc': (-0.2, -0.05), 'nBlock': 1},
      {'rect1_col': '#FF003C', 'rect1_loc': (0.1, -0.25), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.96484375, 'probe_loc': (0.1, -0.25), 'nBlock': 1},
      {'rect1_col': '#00FF28', 'rect1_loc': (-0.25, -0.1), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.36328125, 'probe_loc': (-0.25, -0.1), 'nBlock': 1},
      {'rect1_col': '#6E00FF', 'rect1_loc': (0.35, 0), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.7421875, 'probe_loc': (0.35, 0), 'nBlock': 1}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
    Routine trial
  LoopTerminator Block1
  Routine rest
  LoopInitiator Block2 loopType="TrialHandler"
    conditionsFile = WorkingMemory_block2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'rect1_col': '#FFB300', 'rect1_loc': (-0.1, 0.15), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.12109375, 'probe_loc': (-0.1, 0.15), 'nBlock': 1},
      {'rect1_col': '#00FF52', 'rect1_loc': (0.05, -0.05), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.390625, 'probe_loc': (0.05, -0.05), 'nBlock': 1},
      {'rect1_col': '#00FFDB', 'rect1_loc': (-0.15, -0.1), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.48046875, 'probe_loc': (-0.15, -0.1), 'nBlock': 1},
      {'rect1_col': '#2C00FF', 'rect1_loc': (0.3, 0.15), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.69921875, 'probe_loc': (0.3, 0.15), 'nBlock': 1}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
    Routine trial
  LoopTerminator Block2
  Routine rest
  LoopInitiator Block3 loopType="TrialHandler"
    conditionsFile = WorkingMemory_block3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'rect1_col': '#8BFF00', 'rect1_loc': (-0.3, -0.2), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.24609375, 'probe_loc': (-0.3, -0.2), 'nBlock': 1},
      {'rect1_col': '#FF001E', 'rect1_loc': (0, -0.25), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.984375, 'probe_loc': (0, -0.25), 'nBlock': 1},
      {'rect1_col': '#FF00F5', 'rect1_loc': (-0.35, -0.2), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.84375, 'probe_loc': (-0.35, -0.2), 'nBlock': 1},
      {'rect1_col': '#00F3FF', 'rect1_loc': (0.15, -0.05), 'rect2_col': '#808080', 'rect2_loc': (0, 0), 'rect3_col': '#808080', 'rect3_loc': (0, 0), 'rect4_col': '#808080', 'rect4_loc': (0, 0), 'rect5_col': '#808080', 'rect5_loc': (0, 0), 'rect6_col': '#808080', 'rect6_loc': (0, 0), 'rect7_col': '#808080', 'rect7_loc': (0, 0), 'rect8_col': '#808080', 'rect8_loc': (0, 0), 'corr_col': 0.51171875, 'probe_loc': (0.15, -0.05), 'nBlock': 1}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
    Routine trial
  LoopTerminator Block3
